<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Onix;assembly=OpenEphys.Onix"
                 xmlns:p2="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateContext">
          <p1:Driver>riffa</p1:Driver>
          <p1:Index>0</p1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConfigureNeuropixelsV2eHeadstage">
          <p1:Name>NeuropixelsV2eHeadstage</p1:Name>
          <p1:NeuropixelsV2>
            <p1:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</p1:DeviceName>
            <p1:DeviceAddress>256</p1:DeviceAddress>
            <p1:Enable>true</p1:Enable>
            <p1:ProbeConfigurationA>
              <p1:Reference>External</p1:Reference>
              <p1:ChannelConfiguration>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</p1:ChannelConfiguration>
            </p1:ProbeConfigurationA>
            <p1:GainCalibrationFileA>DummyCal\NP2.0e\22420004543_gainCalValues.csv</p1:GainCalibrationFileA>
            <p1:ProbeConfigurationB>
              <p1:Reference>External</p1:Reference>
              <p1:ChannelConfiguration>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</p1:ChannelConfiguration>
            </p1:ProbeConfigurationB>
            <p1:GainCalibrationFileB>DummyCal\NP2.0e\22420019754_gainCalValues.csv</p1:GainCalibrationFileB>
          </p1:NeuropixelsV2>
          <p1:Bno055>
            <p1:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2eBno055</p1:DeviceName>
            <p1:DeviceAddress>257</p1:DeviceAddress>
            <p1:Enable>true</p1:Enable>
          </p1:Bno055>
          <p1:Port>PortA</p1:Port>
          <p1:PortVoltage xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConfigureBreakoutBoard">
          <p1:Name>BreakoutBoard</p1:Name>
          <p1:Heartbeat>
            <p1:DeviceName>BreakoutBoard/Heartbeat</p1:DeviceName>
            <p1:DeviceAddress>0</p1:DeviceAddress>
            <p1:Enable>true</p1:Enable>
            <p1:BeatsPerSecond>10</p1:BeatsPerSecond>
          </p1:Heartbeat>
          <p1:AnalogIO>
            <p1:DeviceName>BreakoutBoard/AnalogIO</p1:DeviceName>
            <p1:DeviceAddress>6</p1:DeviceAddress>
            <p1:Enable>true</p1:Enable>
            <p1:InputRange0>TenVolts</p1:InputRange0>
            <p1:InputRange1>TenVolts</p1:InputRange1>
            <p1:InputRange2>TenVolts</p1:InputRange2>
            <p1:InputRange3>TenVolts</p1:InputRange3>
            <p1:InputRange4>TenVolts</p1:InputRange4>
            <p1:InputRange5>TenVolts</p1:InputRange5>
            <p1:InputRange6>TenVolts</p1:InputRange6>
            <p1:InputRange7>TenVolts</p1:InputRange7>
            <p1:InputRange8>TenVolts</p1:InputRange8>
            <p1:InputRange9>TenVolts</p1:InputRange9>
            <p1:InputRange10>TenVolts</p1:InputRange10>
            <p1:InputRange11>TenVolts</p1:InputRange11>
            <p1:Direction0>Input</p1:Direction0>
            <p1:Direction1>Input</p1:Direction1>
            <p1:Direction2>Input</p1:Direction2>
            <p1:Direction3>Input</p1:Direction3>
            <p1:Direction4>Input</p1:Direction4>
            <p1:Direction5>Input</p1:Direction5>
            <p1:Direction6>Input</p1:Direction6>
            <p1:Direction7>Input</p1:Direction7>
            <p1:Direction8>Input</p1:Direction8>
            <p1:Direction9>Input</p1:Direction9>
            <p1:Direction10>Input</p1:Direction10>
            <p1:Direction11>Input</p1:Direction11>
          </p1:AnalogIO>
          <p1:DigitalIO>
            <p1:DeviceName>BreakoutBoard/DigitalIO</p1:DeviceName>
            <p1:DeviceAddress>7</p1:DeviceAddress>
            <p1:Enable>true</p1:Enable>
          </p1:DigitalIO>
          <p1:MemoryMonitor>
            <p1:DeviceName>BreakoutBoard/MemoryMonitor</p1:DeviceName>
            <p1:DeviceAddress>10</p1:DeviceAddress>
            <p1:Enable>false</p1:Enable>
            <p1:SampleFrequency>10</p1:SampleFrequency>
          </p1:MemoryMonitor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StartAcquisition">
          <p1:ReadSize>2048</p1:ReadSize>
          <p1:WriteSize>2048</p1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:NeuropixelsV2eData">
          <p1:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</p1:DeviceName>
          <p1:BufferSize>30</p1:BufferSize>
          <p1:ProbeIndex>ProbeA</p1:ProbeIndex>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:NeuropixelsV2eBno055Data">
          <p1:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2eBno055</p1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Commutator.bonsai" />
      <Expression xsi:type="p2:RollingGraphBuilder">
        <p2:IndexSelector />
        <p2:ValueSelector>X,Y,Z,W</p2:ValueSelector>
        <p2:SymbolType>None</p2:SymbolType>
        <p2:LineWidth>1</p2:LineWidth>
        <p2:Capacity>100</p2:Capacity>
        <p2:Min xsi:nil="true" />
        <p2:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:MemoryUsage">
          <p1:DeviceName>BreakoutBoard/MemoryMonitor</p1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>PercentUsed</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>