WorkflowBuilder(Version=2.8.5)
OpenEphys.Onix1.CreateContext(Driver=riffa, Index=0)
-> OpenEphys.Onix1.ConfigureNeuropixelsV2eHeadstage
  Name=NeuropixelsV2eHeadstage
  NeuropixelsV2
    DeviceName=NeuropixelsV2eHeadstage/NeuropixelsV2e
    DeviceAddress=256
    Enable=true
    ProbeConfigurationA
      Reference=External
      ChannelMap
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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    GainCalibrationFileA=DummyCal\NP2.0e\22420004543_gainCalValues.csv
    ProbeConfigurationB
      Reference=External
      ChannelMap
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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    GainCalibrationFileB=DummyCal\NP2.0e\22420019754_gainCalValues.csv
  Bno055(DeviceName=NeuropixelsV2eHeadstage/NeuropixelsV2eBno055, DeviceAddress=257, Enable=true)
  Port=PortA
  PortVoltage=nil
-> OpenEphys.Onix1.ConfigureBreakoutBoard
  Name=BreakoutBoard
  Heartbeat(DeviceName=BreakoutBoard/Heartbeat, DeviceAddress=0, Enable=true, BeatsPerSecond=10)
  AnalogIO
    DeviceName=BreakoutBoard/AnalogIO
    DeviceAddress=6
    Enable=true
    InputRange0=TenVolts
    InputRange1=TenVolts
    InputRange2=TenVolts
    InputRange3=TenVolts
    InputRange4=TenVolts
    InputRange5=TenVolts
    InputRange6=TenVolts
    InputRange7=TenVolts
    InputRange8=TenVolts
    InputRange9=TenVolts
    InputRange10=TenVolts
    InputRange11=TenVolts
    Direction0=Input
    Direction1=Input
    Direction2=Input
    Direction3=Input
    Direction4=Input
    Direction5=Input
    Direction6=Input
    Direction7=Input
    Direction8=Input
    Direction9=Input
    Direction10=Input
    Direction11=Input
  DigitalIO(DeviceName=BreakoutBoard/DigitalIO, DeviceAddress=7, Enable=true)
  MemoryMonitor(DeviceName=BreakoutBoard/MemoryMonitor, DeviceAddress=10, Enable=false, SamplesPerSecond=10)
-> OpenEphys.Onix1.StartAcquisition(ReadSize=2048, WriteSize=2048)

OpenEphys.Onix1.NeuropixelsV2eData(DeviceName=NeuropixelsV2eHeadstage/NeuropixelsV2e, BufferSize=30, ProbeIndex=ProbeA) => #4
-> MemberSelector(Selector=AmplifierData)
#4 -> MemberSelector(Selector=Clock)

OpenEphys.Onix1.NeuropixelsV2eBno055Data(DeviceName=NeuropixelsV2eHeadstage/NeuropixelsV2eBno055) => #7
-> MemberSelector(Selector=Quaternion) => #8
-> IncludeWorkflow(Path=Extensions\Commutator.bonsai)
#8 -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector="X,Y,Z,W", SymbolType=None, LineWidth=1, Capacity=100, Min=nil, Max=nil)
#7 -> MemberSelector(Selector=Clock)

OpenEphys.Onix1.MemoryMonitorData
-> MemberSelector(Selector=PercentUsed)
