WorkflowBuilder(Version=2.8.5)
OpenEphys.Onix1.CreateContext(Driver=riffa, Index=0)
-> OpenEphys.Onix1.ConfigureNeuropixelsV2eHeadstage => #1
  Name=NeuropixelsV2eHeadstage
  NeuropixelsV2e
    DeviceName=NeuropixelsV2eHeadstage/NeuropixelsV2e
    DeviceAddress=256
    Enable=true
    ProbeConfigurationA
      Reference=External
      ChannelMap
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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    GainCalibrationFileA=C:\Users\open-ephys\public\Bonsai-Stuff\onix-bonsai-onix1\Testing\22420009813\22420009813\22420009813_gainCalValues.csv
    ProbeConfigurationB
      Reference=External
      ChannelMap
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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  Bno055(DeviceName=NeuropixelsV2eHeadstage/NeuropixelsV2eBno055, DeviceAddress=257, Enable=true)
  Port=PortA
  PortVoltage=nil
-> OpenEphys.Onix1.StartAcquisition(ReadSize=4096, WriteSize=2048)
#1 -> Timestamp
-> Bonsai.IO.CsvWriter
  FileName=start-time_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
  Selector="Timestamp,Value.AcquisitionClockHz,Value.BlockReadSize,Value.BlockWriteSize"
