<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureNeuropixelsV1eHeadstage">
          <onix1:Name>NeuropixelsV1eHeadstage</onix1:Name>
          <onix1:NeuropixelsV1e>
            <onix1:DeviceName>NeuropixelsV1eHeadstage/NeuropixelsV1e</onix1:DeviceName>
            <onix1:DeviceAddress>256</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:EnableLed>true</onix1:EnableLed>
            <onix1:ProbeConfiguration>
              <onix1:SpikeAmplifierGain>Gain1000</onix1:SpikeAmplifierGain>
              <onix1:LfpAmplifierGain>Gain50</onix1:LfpAmplifierGain>
              <onix1:Reference>External</onix1:Reference>
              <onix1:SpikeFilter>true</onix1:SpikeFilter>
              <onix1:ChannelConfiguration>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</onix1:ChannelConfiguration>
            </onix1:ProbeConfiguration>
          </onix1:NeuropixelsV1e>
          <onix1:Bno055>
            <onix1:DeviceName>NeuropixelsV1eHeadstage/NeuropixelsV1eBno055</onix1:DeviceName>
            <onix1:DeviceAddress>257</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
          </onix1:Bno055>
          <onix1:Port>PortA</onix1:Port>
          <onix1:PortVoltage xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>4096</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>start-time_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp,Value.AcquisitionClockHz,Value.BlockReadSize,Value.BlockWriteSize</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>