<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureNeuropixelsV2eHeadstage">
          <onix1:Name>NeuropixelsV2eHeadstage</onix1:Name>
          <onix1:NeuropixelsV2e>
            <onix1:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</onix1:DeviceName>
            <onix1:DeviceAddress>256</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:ProbeConfigurationA>
              <onix1:Probe>ProbeA</onix1:Probe>
              <onix1:Reference>External</onix1:Reference>
              <onix1:ChannelConfiguration>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</onix1:ChannelConfiguration>
            </onix1:ProbeConfigurationA>
            <onix1:ProbeConfigurationB>
              <onix1:Probe>ProbeB</onix1:Probe>
              <onix1:Reference>External</onix1:Reference>
              <onix1:ChannelConfiguration>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</onix1:ChannelConfiguration>
            </onix1:ProbeConfigurationB>
          </onix1:NeuropixelsV2e>
          <onix1:Bno055>
            <onix1:DeviceName>NeuropixelsV2eHeadstage/PolledBno055</onix1:DeviceName>
            <onix1:DeviceAddress>257</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:AxisMap>ZXY</onix1:AxisMap>
            <onix1:AxisSign>Default</onix1:AxisSign>
          </onix1:Bno055>
          <onix1:Port>PortA</onix1:Port>
          <onix1:PortVoltage xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>4096</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>start-time_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp,Value.AcquisitionClockHz,Value.BlockReadSize,Value.BlockWriteSize</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PortStatus">
          <onix1:DeviceName>NeuropixelsV2eHeadstage/PortController</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>port-status_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Clock,Value.StatusCode,Value.SerdesLocked,Value.SerdesPass</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:NeuropixelsV2eData">
          <onix1:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</onix1:DeviceName>
          <onix1:BufferSize>30</onix1:BufferSize>
          <onix1:ProbeIndex>ProbeA</onix1:ProbeIndex>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>np2-a-clock_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>np2-a-ephys_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:NeuropixelsV2eData">
            <onix1:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</onix1:DeviceName>
            <onix1:BufferSize>30</onix1:BufferSize>
            <onix1:ProbeIndex>ProbeB</onix1:ProbeIndex>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Clock</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>np2-b-clock_.raw</dsp:Path>
            <dsp:Suffix>Timestamp</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>AmplifierData</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>np2-b-ephys_.raw</dsp:Path>
            <dsp:Suffix>Timestamp</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PolledBno055Data">
          <onix1:DeviceName>NeuropixelsV2eHeadstage/PolledBno055</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>bno055_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>it</io:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="OpenEphys.Commutator:AutoCommutator.bonsai">
        <RotationAxis>
          <X>0</X>
          <Y>-1</Y>
          <Z>0</Z>
        </RotationAxis>
        <LedEnable>true</LedEnable>
        <PortName>COM4</PortName>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>