<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix="clr-namespace:OpenEphys.Onix;assembly=OpenEphys.Onix"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:CreateContext">
          <onix:Driver>riffa</onix:Driver>
          <onix:Index>0</onix:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:ConfigureNeuropixelsV2eHeadstage">
          <onix:Name>NeuropixelsV2eHeadstage</onix:Name>
          <onix:NeuropixelsV2>
            <onix:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</onix:DeviceName>
            <onix:DeviceAddress>256</onix:DeviceAddress>
            <onix:Enable>true</onix:Enable>
          </onix:NeuropixelsV2>
          <onix:Bno055>
            <onix:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2eBno055</onix:DeviceName>
            <onix:DeviceAddress>257</onix:DeviceAddress>
            <onix:Enable>true</onix:Enable>
          </onix:Bno055>
          <onix:Port>PortA</onix:Port>
          <onix:PortVoltage xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:StartAcquisition">
          <onix:ReadSize>2048</onix:ReadSize>
          <onix:WriteSize>2048</onix:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:NeuropixelsV2eBno055Data">
          <onix:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2eBno055</onix:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:NeuropixelsV2eData">
          <onix:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</onix:DeviceName>
          <onix:BufferSize>30</onix:BufferSize>
          <onix:ProbeIndex>ProbeA</onix:ProbeIndex>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>