WorkflowBuilder(Version=2.8.1)
OpenEphys.Onix.CreateContext(Driver=riffa, Index=0)
-> OpenEphys.Onix.ConfigureNeuropixelsV2eBetaHeadstage
  Name=NeuropixelsV2eBetaHeadstage
  NeuropixelsV2Beta
    DeviceName=NeuropixelsV2eBetaHeadstage/NeuropixelsV2eBeta
    DeviceAddress=256
    Enable=true
    EnableLed=true
    ProbeConfigurationA
      Reference=External
      ChannelMap
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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    ProbeConfigurationB
      Reference=External
      ChannelMap
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=0)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=1)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=2)
        NeuropixelsV2QuadShankElectrode(ElectrodeNumber=3)
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  Bno055(DeviceName=NeuropixelsV2eBetaHeadstage/NeuropixelsV2eBno055, DeviceAddress=257, Enable=true)
  Port=PortA
  PortVoltage=nil
-> OpenEphys.Onix.StartAcquisition(ReadSize=2048, WriteSize=2048)

OpenEphys.Onix.NeuropixelsV2eBno055Data(DeviceName=NeuropixelsV2eBetaHeadstage/NeuropixelsV2eBno055)
OpenEphys.Onix.NeuropixelsV2eBetaData(DeviceName=NeuropixelsV2eBetaHeadstage/NeuropixelsV2eBeta, BufferSize=30, ProbeIndex=ProbeA)
