<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix="clr-namespace:OpenEphys.Onix;assembly=OpenEphys.Onix"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix:Bno055Data">
          <onix:DeviceName>Headstage64/Bno055</onix:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EulerAngle</Selector>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:ValueSelector>X,Y,Z</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:ValueSelector>X,Y,Z,W</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Acceleration</Selector>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:ValueSelector>X,Y,Z</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Gravity</Selector>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:ValueSelector>X,Y,Z</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Temperature</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="0" To="9" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>